PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = crux_code
  keyboardBackend = ioHub
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Routines
  Routine stimulus
    TextComponent stimulus_text
      font = Baskerville
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $conditions
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine intro
    TextComponent text
      font = Baskerville
      letterHeight = 0.06
      startVal [time (s)] = -3.0
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      text:
        Think of the word that appears on screen.

        Head
        Feet
        Left Arm
        Right Arm
        Eyes

        Press 'space' to continue
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = -3.0
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Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/harpertzou/Desktop/crux_stimulus_final.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('conditions', 'feet')]),
      OrderedDict([('conditions', 'left hand')]),
      OrderedDict([('conditions', 'right hand')]),
      OrderedDict([('conditions', 'eyes')]),
      OrderedDict([('conditions', 'head')])]
    Routine stimulus
  LoopTerminator trials
